opentrons/protocol-designer 3.0.7
schemaVersion: 3
protocolName: 7x7 single
author: CSBL / jingi yeo
description: seungwoo's experiment automation
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p300_single: {mount: left}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Tip Rack 300 µL: {definitionId: opentrons/opentrons_96_tiprack_300ul/1, slot: 1}
  destination: {definitionId: opentrons/biorad_96_wellplate_200ul_pcr/1, slot: 2}
  Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap: {definitionId: opentrons/opentrons_24_tuberack_eppendorf_1.5ml_safelock_snapcap/1, slot: 3}
pipetteTiprackAssignments:
  p300_single: opentrons/opentrons_96_tiprack_300ul/1
ingredients:
  - Liquid 1
  - Liquid 2
  - Liquid 3
  - Liquid 4
  - Liquid 5
  - Liquid 6
  - Liquid 7
ingredLocations:
  Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap:
    Liquid 1 {volume: 1000}: A1
    Liquid 2 {volume: 1000}: A2
    Liquid 3 {volume: 1000}: A3
    Liquid 4 {volume: 1000}: A4
    Liquid 5 {volume: 1000}: A5
    Liquid 6 {volume: 1000}: A6
    Liquid 7 {volume: 1000}: B1
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 50
  path: single
  changeTip: once
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: destination
  dispense_wells: A1-A7
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 50
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: destination
  dispense_wells: A1-G1
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 50
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: destination
  dispense_wells: B1-B7
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  stepDetails: L2 col
  pipette: p300_single
  volume: 50
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: destination
  dispense_wells: A2-G2
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  stepDetails: L4 row
  pipette: p300_single
  volume: 50
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A3
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  aspirate_mmFromBottom: 1
  dispense_labware: destination
  dispense_wells: C1-C7
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  stepDetails: L3 col
  pipette: p300_single
  volume: 50
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A3
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  aspirate_mmFromBottom: 1
  dispense_labware: destination
  dispense_wells: A3-G3
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  stepDetails: L4 row
  pipette: p300_single
  volume: 50
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A4
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  aspirate_mmFromBottom: 1
  dispense_labware: destination
  dispense_wells: D1-D7
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  stepDetails: L4 col
  pipette: p300_single
  volume: 50
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A4
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  aspirate_mmFromBottom: 1
  dispense_labware: destination
  dispense_wells: A4-G4
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  stepDetails: L5 row
  pipette: p300_single
  volume: 50
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A5
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  aspirate_mmFromBottom: 1
  dispense_labware: destination
  dispense_wells: E1-E7
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  stepDetails: L5 col
  pipette: p300_single
  volume: 50
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A5
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  aspirate_mmFromBottom: 1
  dispense_labware: destination
  dispense_wells: A5-G5
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  stepDetails: L6 row
  pipette: p300_single
  volume: 50
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A6
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  aspirate_mmFromBottom: 1
  dispense_labware: destination
  dispense_wells: F1-F7
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  stepDetails: L6 col
  pipette: p300_single
  volume: 50
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A6
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  aspirate_mmFromBottom: 1
  dispense_labware: destination
  dispense_wells: A6-G6
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  stepDetails: L7 row
  pipette: p300_single
  volume: 50
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: B1
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  aspirate_mmFromBottom: 1
  dispense_labware: destination
  dispense_wells: G1-G7
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  stepDetails: L7 col
  pipette: p300_single
  volume: 50
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: B1
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  aspirate_mmFromBottom: 1
  dispense_labware: destination
  dispense_wells: A7-G7
  dispense_mmFromBottom: 0.5
labwareDefinitions:
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commands:
- pickUpTip: {pipette: p300_single, labware: Opentrons 96 Tip Rack 300 µL, well: A1}
- aspirate: {pipette: p300_single, volume: 50, labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap, well: A1, offsetFromBottomMm: 1, flowRate: 150}
- dispense: {pipette: p300_single, volume: 50, labware: destination, well: A1, offsetFromBottomMm: 0.5, flowRate: 300}
- aspirate: {pipette: p300_single, volume: 50, labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap, well: A1, offsetFromBottomMm: 1, flowRate: 150}
- dispense: {pipette: p300_single, volume: 50, labware: destination, well: A2, offsetFromBottomMm: 0.5, flowRate: 300}
- aspirate: {pipette: p300_single, volume: 50, labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap, well: A1, offsetFromBottomMm: 1, flowRate: 150}
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