opentrons/protocol-designer 3.0.7
schemaVersion: 3
protocolName: 7x7 single_efficient_3.5mm_from_bottom
author: CSBL / jingi yeo
description: seungwoo's experiment automation.  optimization of time, not dispensing tips as possible
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p300_single: {mount: left}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Tip Rack 300 µL: {definitionId: opentrons/opentrons_96_tiprack_300ul/1, slot: 1}
  Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap: {definitionId: opentrons/opentrons_24_tuberack_eppendorf_1.5ml_safelock_snapcap/1, slot: 3}
  destination: {definitionId: opentrons/nest_96_wellplate_200ul_flat/1, slot: 2}
pipetteTiprackAssignments:
  p300_single: opentrons/opentrons_96_tiprack_300ul/1
ingredients:
  - Liquid 1
  - Liquid 2
  - Liquid 3
  - Liquid 4
  - Liquid 5
  - Liquid 6
  - Liquid 7
ingredLocations:
  Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap:
    Liquid 1 {volume: 1000}: A1
    Liquid 2 {volume: 1000}: A2
    Liquid 3 {volume: 1000}: A3
    Liquid 4 {volume: 1000}: A4
    Liquid 5 {volume: 1000}: A5
    Liquid 6 {volume: 1000}: A6
    Liquid 7 {volume: 1000}: B1
savedStepForms:
- stepType: moveLiquid
  stepName: source1 once
  pipette: p300_single
  volume: 50
  path: single
  changeTip: once
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  aspirate_touchTip_checkbox: true
  dispense_labware: destination
  dispense_wells: A1-G1, A2-A7
  dispense_mmFromBottom: 3.5
- stepType: moveLiquid
  stepName: source every
  pipette: p300_single
  volume: 50
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  aspirate_touchTip_checkbox: true
  dispense_labware: destination
  dispense_wells: A1
  dispense_mmFromBottom: 3.5
- stepType: moveLiquid
  stepName: source2 once
  pipette: p300_single
  volume: 50
  path: single
  changeTip: once
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  aspirate_touchTip_checkbox: true
  dispense_labware: destination
  dispense_wells: B2-G2, B3-B7
  dispense_mmFromBottom: 3.5
- stepType: moveLiquid
  stepName: source2 every
  pipette: p300_single
  volume: 50
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  aspirate_touchTip_checkbox: true
  dispense_labware: destination
  dispense_wells: B1, A2, B2
  dispense_mmFromBottom: 3.5
- stepType: moveLiquid
  stepName: source3 once
  pipette: p300_single
  volume: 50
  path: single
  changeTip: once
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A3
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  aspirate_mmFromBottom: 1
  dispense_labware: destination
  dispense_wells: C3-G3, C4-C7
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: source3 every
  pipette: p300_single
  volume: 50
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A3
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  aspirate_mmFromBottom: 1
  aspirate_touchTip_checkbox: true
  dispense_labware: destination
  dispense_wells: C1, C2, A3-C3
  dispense_mmFromBottom: 3.5
- stepType: moveLiquid
  stepName: source4 once
  pipette: p300_single
  volume: 50
  path: single
  changeTip: once
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A4
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  aspirate_mmFromBottom: 1
  aspirate_touchTip_checkbox: true
  dispense_labware: destination
  dispense_wells: D4-G4, D5-D7
  dispense_mmFromBottom: 3.5
- stepType: moveLiquid
  stepName: source4 every
  pipette: p300_single
  volume: 50
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A4
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  aspirate_mmFromBottom: 1
  aspirate_touchTip_checkbox: true
  dispense_labware: destination
  dispense_wells: D1-D3, A4-D4
  dispense_mmFromBottom: 3.5
- stepType: moveLiquid
  stepName: source5 once
  pipette: p300_single
  volume: 50
  path: single
  changeTip: once
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A5
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  aspirate_mmFromBottom: 1
  aspirate_touchTip_checkbox: true
  dispense_labware: destination
  dispense_wells: E5-G5, E6, E7
  dispense_mmFromBottom: 3.5
- stepType: moveLiquid
  stepName: source5 every
  pipette: p300_single
  volume: 50
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A5
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  aspirate_mmFromBottom: 1
  aspirate_touchTip_checkbox: true
  dispense_labware: destination
  dispense_wells: E1-E4, A5-E5
  dispense_mmFromBottom: 3.5
- stepType: moveLiquid
  stepName: source6 once
  pipette: p300_single
  volume: 50
  path: single
  changeTip: once
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A6
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  aspirate_mmFromBottom: 1
  aspirate_touchTip_checkbox: true
  dispense_labware: destination
  dispense_wells: F6, G6, F7
  dispense_mmFromBottom: 3.5
- stepType: moveLiquid
  stepName: source6 every
  pipette: p300_single
  volume: 50
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A6
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  aspirate_mmFromBottom: 1
  aspirate_touchTip_checkbox: true
  dispense_labware: destination
  dispense_wells: F1-F5, A6-F6
  dispense_mmFromBottom: 3.5
- stepType: moveLiquid
  stepName: source7 once
  pipette: p300_single
  volume: 50
  path: single
  changeTip: once
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: B1
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  aspirate_mmFromBottom: 1
  aspirate_touchTip_checkbox: true
  dispense_labware: destination
  dispense_wells: G7
  dispense_mmFromBottom: 3.5
- stepType: moveLiquid
  stepName: source7 every
  pipette: p300_single
  volume: 50
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: B1
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  aspirate_mmFromBottom: 1
  aspirate_touchTip_checkbox: true
  dispense_labware: destination
  dispense_wells: G1-G6, A7-G7
  dispense_mmFromBottom: 3.5
labwareDefinitions:
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commands:
- pickUpTip: {pipette: p300_single, labware: Opentrons 96 Tip Rack 300 µL, well: A1}
- aspirate: {pipette: p300_single, volume: 50, labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap, well: A1, offsetFromBottomMm: 1, flowRate: 150}
- touchTip: {pipette: p300_single, labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap, well: A1, offsetFromBottomMm: 36.8}
- dispense: {pipette: p300_single, volume: 50, labware: destination, well: A1, offsetFromBottomMm: 3.5, flowRate: 300}
- aspirate: {pipette: p300_single, volume: 50, labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap, well: A1, offsetFromBottomMm: 1, flowRate: 150}
- touchTip: {pipette: p300_single, labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap, well: A1, offsetFromBottomMm: 36.8}
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